forall insert kext
forall insert kextna1

nsyn=0
forsec "dend_apical" {nsyn=nsyn+1}
objref syn[nsyn]
proc syn_set_col3(){local k
	k=0
	forsec "dend_apical"{
		syn[k]=new expsyn2c_col3(0.5)
		syn[k].tot_num=$1  //total stimulation number
		syn[k].num=$2 	//number of stimulation in each group
		syn[k].ampar_tot=$3
		syn[k].nmdar_tot=$4
		syn[k].del=10
		syn[k].interval_s=$5  //short interval
		syn[k].interval_l=$6  //long interval
		k=k+1
	}
}

proc syn_set_col4(){ local k
	k=0
	forsec "dend_apical"{
		syn[k]=new expsyn2c_col4(0.5)
		syn[k].tot_num=$1  //total stimulation number
		syn[k].num=$2 	//number of stimulation in each group
		syn[k].ampar_tot=$3
		syn[k].nmdar_tot=$4
		syn[k].del=10
		syn[k].interval_s=$5  //short interval
		syn[k].interval_l=$6  //long interval
		k=k+1
	}
}

soma insert ca1ca
soma insert ca1L

actk= 1 //.75
actna=1  //.75
actca= 1 //.19
nai0_na_ion=10*actna
nao0_na_ion=145*actna
ki0_k_ion=140*actk
ko0_k_ion=2.5*actk
cai0_ca_ion=2e-5*actca
cao0_ca_ion=2*actca


objref slist
slist=new SectionList()
sec_23_24_dend_apical slist.append()
sec_27_35_dend_apical slist.append()
sec_35_45_dend_apical slist.append()
sec_46_54_dend_apical slist.append()
sec_54_56_dend_apical slist.append()
sec_57_59_dend_apical slist.append()
soma distance()

k=0
forsec "dend_apical" {
	print secname(),"	", k, "		", distance(0.5)
	k=k+1
}

forall insert epasn
stim.amp=0
stim.dur=0
tstop=500

forsec "axon_iseg" {
	insert kext
	insert epasn
	insert kextna1
}

forsec "axon_iseg" {
	insert kext
	insert epasn
	insert kextna1
}

axon_hill {
	insert kext
	insert epasn
	insert kextna1
}

soma {
	insert kext
	insert epasn
	insert kextna1
}

forsec "dend" {
	insert kext
	insert epasn
	insert kextna1
}


proc para_save(){local k localobj file, pvec
	pvec=new Vector(61)
	file=new File()
	
	//Naf_i0
	pvec.x[0]=vhalf_n_Naf_i0
	pvec.x[1]=slope_n_Naf_i0
	pvec.x[2]=tauA_n_Naf_i0
	pvec.x[3]=tauG_n_Naf_i0

	pvec.x[4]=vhalf_h_Naf_i0
	pvec.x[5]=slope_h_Naf_i0
	pvec.x[6]=tauA_h_Naf_i0
	pvec.x[7]=tauG_h_Naf_i0

	//Naf_i1
	pvec.x[8]=vhalf_n_Naf_i1
	pvec.x[9]=slope_n_Naf_i1
	pvec.x[10]=tauA_n_Naf_i1
	pvec.x[11]=tauG_n_Naf_i1

	pvec.x[12]=vhalf_h_Naf_i1
	pvec.x[13]=slope_h_Naf_i1
	pvec.x[14]=tauA_h_Naf_i1
	pvec.x[15]=tauG_h_Naf_i1

	//KDR_i1
	pvec.x[16]=vhalf_n_KDR_i1
	pvec.x[17]=slope_n_KDR_i1
	pvec.x[18]=tauA_n_KDR_i1
	pvec.x[19]=tauG_n_KDR_i1

	pvec.x[20]=vhalf_h_KDR_i1
	pvec.x[21]=slope_h_KDR_i1
	pvec.x[22]=tauA_h_KDR_i1
	pvec.x[23]=tauG_h_KDR_i1

	//KA_i1
	pvec.x[24]=vhalf_n_KA_i1
	pvec.x[25]=slope_n_KA_i1
	pvec.x[26]=tauA_n_KA_i1
	pvec.x[27]=tauG_n_KA_i1

	pvec.x[28]=vhalf_h_KA_i1
	pvec.x[29]=slope_h_KA_i1
	pvec.x[30]=tauA_h_KA_i1
	pvec.x[31]=tauG_h_KA_i1

	//KDM
	pvec.x[32]=vhalf_n_KDM_i1
	pvec.x[33]=slope_n_KDM_i1
	pvec.x[34]=tauA_n_KDM_i1
	pvec.x[35]=tauG_n_KDM_i1

	pvec.x[36]=vhalf_h_KDM_i1
	pvec.x[37]=slope_h_KDM_i1
	pvec.x[38]=tauA_h_KDM_i1
	pvec.x[39]=tauG_h_KDM_i1

	//Gbar
	pvec.x[40]=Gbar_Naf
	pvec.x[41]=s0_Gbar_Naf
	pvec.x[42]=aXh_Gbar_Naf
	pvec.x[43]=aXi0_Gbar_Naf
	pvec.x[44]=aXi1_Gbar_Naf

	pvec.x[45]=Gbar_KDR
	pvec.x[46]=s0_Gbar_KDR
	pvec.x[47]=aXh_Gbar_KDR
	pvec.x[48]=aXi0_Gbar_KDR
	pvec.x[49]=aXi1_Gbar_KDR
	pvec.x[50]=Gbar_KA
	pvec.x[51]=Gbar_KDM

	pvec.x[52]=syn[0].tot_num
	pvec.x[53]=syn[0].num
	pvec.x[54]=syn[0].ampar_tot
	pvec.x[55]=syn[0].nmdar_tot
	pvec.x[56]=syn[0].interval_s
	pvec.x[57]=syn[0].interval_l

	pvec.x[58]=axon_iseg[0].fhspace_kext
	
	pvec.x[59]=soma.depth_ca1ca
	pvec.x[60]=soma.tau_ca1ca

	file.wopen($s1)
	//pvec.fwrite(file
	for k=0,pvec.size()-1{
		file.printf("%f\n", pvec.x[k])
	}
	file.close()	
}

proc para_read(){local k localobj pvec, file
	pvec=new Vector(61)
	file=new File()

	file.ropen($s1)
	for k=0, pvec.size()-1{
		pvec.x[k]=file.scanvar()
	}
		
	//Naf_i0
	vhalf_n_Naf_i0=pvec.x[0]
	slope_n_Naf_i0=pvec.x[1]
	tauA_n_Naf_i0=pvec.x[2]
	tauG_n_Naf_i0=pvec.x[3]

	vhalf_h_Naf_i0=pvec.x[4]
	slope_h_Naf_i0=pvec.x[5]
	tauA_h_Naf_i0=pvec.x[6]
	tauG_h_Naf_i0=pvec.x[7]

	//Naf_i1
	vhalf_n_Naf_i1=pvec.x[8]
	slope_n_Naf_i1=pvec.x[9]
	tauA_n_Naf_i1=pvec.x[10]
	tauG_n_Naf_i1=pvec.x[11]

	vhalf_h_Naf_i1=pvec.x[12]
	slope_h_Naf_i1=pvec.x[13]
	tauA_h_Naf_i1=pvec.x[14]
	tauG_h_Naf_i1=pvec.x[15]

	//KDR_i1
	vhalf_n_KDR_i1=pvec.x[16]
	slope_n_KDR_i1=pvec.x[17]
	tauA_n_KDR_i1=pvec.x[18]
	tauG_n_KDR_i1=pvec.x[19]

	vhalf_h_KDR_i1=pvec.x[20]
	slope_h_KDR_i1=pvec.x[21]
	tauA_h_KDR_i1=pvec.x[22]
	tauG_h_KDR_i1=pvec.x[23]

	//KA_i1
	vhalf_n_KA_i1=pvec.x[24]
	slope_n_KA_i1=pvec.x[25]
	tauA_n_KA_i1=pvec.x[26]
	tauG_n_KA_i1=pvec.x[27]

	vhalf_h_KA_i1=pvec.x[28]
	slope_h_KA_i1=pvec.x[29]
	tauA_h_KA_i1=pvec.x[30]
	tauG_h_KA_i1=pvec.x[31]

	//KDM
	vhalf_n_KDM_i1=pvec.x[32]
	slope_n_KDM_i1=pvec.x[33]
	tauA_n_KDM_i1=pvec.x[34]
	tauG_n_KDM_i1=pvec.x[35]

	vhalf_h_KDM_i1=pvec.x[36]
	slope_h_KDM_i1=pvec.x[37]
	tauA_h_KDM_i1=pvec.x[38]
	tauG_h_KDM_i1=pvec.x[39]

	//Gbar
	Gbar_Naf=pvec.x[40]
	s0_Gbar_Naf=pvec.x[41]
	aXh_Gbar_Naf=pvec.x[42]
	aXi0_Gbar_Naf=pvec.x[43]
	aXi1_Gbar_Naf=pvec.x[44]

	Gbar_KDR=pvec.x[45]
	s0_Gbar_KDR=pvec.x[46]
	aXh_Gbar_KDR=pvec.x[47]
	aXi0_Gbar_KDR=pvec.x[48]
	aXi1_Gbar_KDR=pvec.x[49]
	Gbar_KA=pvec.x[50]
	Gbar_KDM=pvec.x[51]
	forsec "dend_apical" fhspace_kext=pvec.x[58]
	forsec "axon_iseg" fhspace_kext=pvec.x[58]
	axon_hill.fhspace_kext=pvec.x[58]
	
	soma.depth_ca1ca=pvec.x[59]
	soma.tau_ca1ca=pvec.x[60]

	//syn_set_col4(num_tot, num, ampar_tot, nmdar_tot, interval_s, interval_l)
	syn_set_col4(pvec.x[52], pvec.x[53], pvec.x[54], pvec.x[55], pvec.x[56], pvec.x[57])
	print "num_tot:", pvec.x[52], "	num:", pvec.x[53], "	ampar_tot:", pvec.x[54], "	nmdar_tot:", pvec.x[55], "	interval_s:", pvec.x[56], "	interval_l:", pvec.x[57]			

	file.close()
}

//para_read("para.txt")
objref soma_cai, soma_ica, soma_v, inmdar_ca_syn21, inmdar_ca_syn32, inmdar_ca_syn42, inmdar_ca_syn51, inmdar_ca_syn53, inmdar_ca_syn56, v_syn21, v_syn32, v_syn42, v_syn51, v_syn53, v_syn56, timevec

soma_cai=new Vector()
soma_ica=new Vector()
soma_v=new Vector()
inmdar_ca_syn21=new Vector()
inmdar_ca_syn32=new Vector()
inmdar_ca_syn42=new Vector()
inmdar_ca_syn51=new Vector()
inmdar_ca_syn53=new Vector()
inmdar_ca_syn56=new Vector()
v_syn21=new Vector()
v_syn32=new Vector()
v_syn42=new Vector()
v_syn51=new Vector()
v_syn53=new Vector()
v_syn56=new Vector()
timevec=new Vector()


/*
para_read("para.txt")
syn_set_col4()
data_record()
chdir("  ")
data_save()

*/
proc data_record(){
	soma_cai.record(&soma.cai(0.5))
	soma_ica.record(&soma.ica(0.5))
	soma_v.record(&soma.v(0.5))

	inmdar_ca_syn21.record(&syn[21].inmdar_ca)
	inmdar_ca_syn32.record(&syn[32].inmdar_ca)
	inmdar_ca_syn42.record(&syn[42].inmdar_ca)
	inmdar_ca_syn51.record(&syn[51].inmdar_ca)
	inmdar_ca_syn53.record(&syn[53].inmdar_ca)
	inmdar_ca_syn56.record(&syn[56].inmdar_ca)

	v_syn21.record(&sec_23_24_dend_apical.v(0.5))
	v_syn32.record(&sec_27_35_dend_apical.v(0.5))
	v_syn42.record(&sec_35_45_dend_apical.v(0.5))
	v_syn51.record(&sec_46_54_dend_apical.v(0.5))
	v_syn53.record(&sec_54_56_dend_apical.v(0.5))
	v_syn56.record(&sec_57_59_dend_apical.v(0.5))

	timevec.record(&t)
}
proc data_save(){
	vecsave(soma_cai, "soma_cai.dat")
	vecsave(soma_ica, "soma_ica.dat")
	vecsave(soma_v, "soma_v.dat")
	vecsave(inmdar_ca_syn21, "inmdar_ca_syn21.dat")
	vecsave(inmdar_ca_syn32, "inmdar_ca_syn32.dat")
	vecsave(inmdar_ca_syn42, "inmdar_ca_syn42.dat")
	vecsave(inmdar_ca_syn51, "inmdar_ca_syn51.dat")
	vecsave(inmdar_ca_syn53, "inmdar_ca_syn53.dat")
	vecsave(inmdar_ca_syn56, "inmdar_ca_syn56.dat")
	vecsave(v_syn21, "v_syn21.dat")
	vecsave(v_syn32, "v_syn32.dat")
	vecsave(v_syn42, "v_syn42.dat")
	vecsave(v_syn51, "v_syn51.dat")
	vecsave(v_syn53, "v_syn53.dat")
	vecsave(v_syn56, "v_syn56.dat")
}

proc vecsave() {local k localobj vec, file
	vec=$o1
	file=new File()
	file.wopen($s2)

	file.printf("label: %s\n", $s2)
	file.printf("%d\n", vec.size())
	for k=0,vec.size()-1{
		file.printf("%f\t %f\n", timevec.x[k], vec.x[k])
	}
	file.close()
}